<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>30</cv:X>
            <cv:Y>355</cv:Y>
            <cv:Width>1345</cv:Width>
            <cv:Height>530</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Git Repos\place-click\video\071324_testing.mp4</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>99.97</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Gaussian</cv:SmoothType>
          <cv:Size1>27</cv:Size1>
          <cv:Size2>27</cv:Size2>
          <cv:Sigma1>20</cv:Sigma1>
          <cv:Sigma2>20</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>32</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Invert Image</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

@returns(IplImage)
def process(value):

  image = 255-value
  return image</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxSimple</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>12</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Gray2Bgr</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>0</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="IntProperty">
          <Value>30</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="IntProperty">
          <Value>30</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:AsyncSubject" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Clickbait Task</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
clr.AddReference("System")
from OpenCV.Net import *
import math
import time
import random

# Class to generate maze coordinates
class GridMaze:
    def __init__(self, maze_bounds, maze_dims):
        self.bounds = maze_bounds
        self.shape = maze_dims
        
        cellsize_x = maze_bounds[0] // maze_dims[0]
        cellsize_y = maze_bounds[1] // maze_dims[1]
        
        # Generate Grid
        self.cells = [
            (Point(x * cellsize_x, y * cellsize_y), 
             Point((x + 1) * cellsize_x, (y + 1) * cellsize_y))
            for y in range(self.shape[1])
            for x in range(self.shape[0])
        ]

def draw_grid(grid, img):
    for cell in grid.cells:
        CV.Rectangle(img, cell[0], cell[1], grid_color, thickness=2)

# Function to extract dims from image
def get_image_shape(img):
    size = img.Size
    return [size.Width, size.Height]

# Modified get_grid_location to handle potential float inputs
def get_grid_location(grid, centroid_x, centroid_y, tgt_list, img):
    cell_width = grid.bounds[0] // grid.shape[0]
    cell_height = grid.bounds[1] // grid.shape[1]
    
    grid_x = int(centroid_x // cell_width)
    grid_y = int(centroid_y // cell_height)
    
    # Get current cell and draw it
    if 0 &lt;= grid_x &lt; grid.shape[0] and 0 &lt;= grid_y &lt; grid.shape[1]:
        cell = grid.cells[grid_y * grid.shape[0] + grid_x]
        CV.Rectangle(img, cell[0], cell[1], mouse_loc_color, thickness=-1)
    
    # Check if current cell is in target list. If so, remove from target list
    tgt_list = [tgt for tgt in tgt_list if tgt != grid_y * grid.shape[0] + grid_x]
    
    return grid_x, grid_y, tgt_list

def create_blank_canvas(width, height, channels=3, color=(0, 0, 0)):
    depth = IplDepth.U8
    img = IplImage(Size(width, height), depth, channels)
    if channels == 1:
        fill_color = Scalar.All(color[0])
    else:
        fill_color = Scalar.Rgb(color[0], color[1], color[2])
    img.Set(fill_color)
    
    return img

"""
Define targets
"""

def generate_targets(grid_cells_x, grid_cells_y, num_tgt):

  possible_targets = grid_cells_x * grid_cells_y
  tgt_list = []

  for ii in range(num_targets):
    tgt_cell = random.randint(0, possible_targets-1)
    tgt_list.append(tgt_cell)
  
  return grid_cells_x, grid_cells_y, tgt_list

def draw_targets(tgt_list, grid, img):
  for target in tgt_list:
    CV.Rectangle(img, grid.cells[target][0], grid.cells[target][1], target_color, thickness=-1)

# Here we define the number of grid cells to divide the arena by
grid_x = 10
grid_y = 4

# And the number of search targets
num_targets = 1

# Generate grid and targets
global target_list
grid_cells_x, grid_cells_y, target_list = generate_targets(grid_x, grid_y, num_targets)

"""
Global variables
"""
# Initialize reward variables
global reward_state
global click
global click_start_time
global drinking
global reward_left
global reward_right
global reward_left_start_time
global reward_right_start_time

reward_state = True
click = False
click_start_time = 0
drinking = False
reward_left = False
reward_right = False
reward_left_start_time = 0
reward_right_start_time = 0

# ITI Variables
global iti_start_time
global iti_duration
global in_iti
global withdrawal_start_time
global in_withdrawal_period
global prev_poke_left
global prev_poke_right

iti_start_time = 0
iti_duration = 0
in_iti = False
withdrawal_start_time = 0
in_withdrawal_period = False
prev_poke_left = False
prev_poke_right = False

"""
# Visualization parameters
"""
centroid_color = Scalar.Rgb(255, 255, 255)
mouse_loc_color = Scalar.Rgb(255, 0, 0)
target_color = Scalar.Rgb(64, 64, 64)
grid_color = Scalar.Rgb(128, 128, 128)
centroid_radius = 5

"""
Execute task
"""

@returns(tuple)
def process(value):
    # Declare global vars
    global target_list
    global reward_state
    global click
    global click_start_time
    global drinking
    global reward_left
    global reward_right
    global reward_left_start_time
    global reward_right_start_time
    global iti_start_time
    global iti_duration
    global in_iti
    global withdrawal_start_time
    global in_withdrawal_period
    global prev_poke_left
    global prev_poke_right


    # Timing-related vars
    current_time = time.time()
    reward_duration = 0.05  # 0.5 seconds
    click_duration = 0.1
    iti_duration_min = 5.0
    iti_duration_max = 5.0
    withdrawal_duration = 0.5

    # Load realtime variables from Zip node
    centroid_x, centroid_y, image = value[0].Item1, value[0].Item2, value[0].Item3
    poke_left, poke_right = bool(value[1][0]), bool(value[1][1])

    # Process grid and canvas
    grid_loc_x, grid_loc_y = None, None
    img_dims = get_image_shape(image)
    grid = GridMaze(img_dims, [grid_cells_x, grid_cells_y])
    canvas = create_blank_canvas(img_dims[0], img_dims[1])
    draw_grid(grid, canvas)
    draw_targets(target_list, grid, canvas)

    if not (math.isnan(centroid_x) or math.isnan(centroid_y)):
        grid_loc_x, grid_loc_y, target_list = get_grid_location(grid, centroid_x, centroid_y, target_list, canvas)
        CV.Circle(canvas, Point(int(centroid_x), int(centroid_y)), centroid_radius, centroid_color, -1)

    # State machine logic
    if in_iti:
        if current_time - iti_start_time &gt;= iti_duration:
            in_iti = False
            target_list = generate_targets(grid_x, grid_y, num_targets)[2]
    elif in_withdrawal_period:
        if not (poke_left or poke_right):  # Mouse has withdrawn
            if current_time - withdrawal_start_time &gt;= withdrawal_duration:
                in_withdrawal_period = False
                in_iti = True
                iti_start_time = current_time
                iti_duration = random.uniform(iti_duration_min, iti_duration_max)
        else:  # Mouse is still poking, reset withdrawal timer
            withdrawal_start_time = current_time
    elif reward_state:
        if reward_left and current_time - reward_left_start_time &gt;= reward_duration:
            reward_left = False
            in_withdrawal_period = True
            withdrawal_start_time = current_time
            #reward_state = False
        elif reward_right and current_time - reward_right_start_time &gt;= reward_duration:
            reward_right = False
            in_withdrawal_period = True
            withdrawal_start_time = current_time
            #reward_state = False
        elif poke_left and not reward_left and not reward_right:
            reward_left = True
            reward_left_start_time = current_time
        elif poke_right and not reward_right and not reward_left:
            reward_right = True
            reward_right_start_time = current_time
    else:
        if len(target_list) == 0:
            reward_state = True
            click = True
            click_start_time = current_time

    # Handle click duration
    if click and current_time - click_start_time &gt;= click_duration:
        click = False

    # Update previous poke states and set drinking state
    prev_poke_left, prev_poke_right = poke_left, poke_right
    drinking = poke_left or poke_right

    return (canvas, (grid_loc_x, grid_loc_y), reward_state, reward_left, reward_right, drinking, in_iti, click)</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Grid Visualization</ipy:Name>
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
clr.AddReference("System")
from OpenCV.Net import *

@returns(IplImage)
def process(value):
  return value[0]

</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Grid Location</ipy:Name>
        <ipy:Script>@returns(tuple)
def process(value):
  return value[1]</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Water Left</ipy:Name>
        <ipy:Script># Get reward_left state

@returns(bool)
def process(value):
  return value[3]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>7</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Water Right</ipy:Name>
        <ipy:Script># Get reward_right state and reward state

@returns(bool)
def process(value):
  return value[4]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>8</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Click</ipy:Name>
        <ipy:Script># Get click state (click is always last item in return statement)

@returns(bool)
def process(value):
  return value[-1]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>12</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>Reward State</ipy:Name>
        <ipy:Script># Get reward state

@returns(bool)
def process(value):
  return value[2]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>5</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>ITI</ipy:Name>
        <ipy:Script># Get click state (iti is always second to last item in return statement)

@returns(bool)
def process(value):
  return value[-2]</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>6</ard:Pin>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="3" To="14" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="15" Label="Source2" />
      <Edge From="14" To="15" Label="Source3" />
      <Edge From="15" To="22" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="20" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="23" To="25" Label="Source1" />
      <Edge From="23" To="26" Label="Source1" />
      <Edge From="23" To="28" Label="Source1" />
      <Edge From="23" To="30" Label="Source1" />
      <Edge From="23" To="32" Label="Source1" />
      <Edge From="23" To="34" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>